<?xml version='1.0' encoding='UTF-8'?>
<model name="Akt_Hatakeyama" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <component name="Akt">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="PI3Kstar" public_interface="in" units="nm"/>
        <variable cmeta:id="Akt_Akt_PIPP" initial_value="0.0" name="Akt_PIPP" public_interface="out" units="nm"/>
        <variable name="MEKP" public_interface="in" units="nm"/>
        <variable name="MEKPP" public_interface="in" units="nm"/>
        <variable initial_value="16.9" name="kf27" units="first_order_rate_constant"/>
        <variable initial_value="39.1" name="k27" units="nm"/>
        <variable initial_value="17000" name="V28" units="flux"/>
        <variable initial_value="9.02" name="k28" units="nm"/>
        <variable initial_value="507" name="kf29" units="second_order_rate_constant"/>
        <variable initial_value="234" name="kb29" units="first_order_rate_constant"/>
        <variable initial_value="20000" name="V30" units="flux"/>
        <variable initial_value="80000" name="k30" units="nm"/>
        <variable initial_value="0.107" name="kf31" units="first_order_rate_constant"/>
        <variable initial_value="4.35" name="k31" units="nm"/>
        <variable initial_value="20000" name="V32" units="flux"/>
        <variable initial_value="80000" name="k32" units="nm"/>
        <variable initial_value="0.211" name="kf33" units="first_order_rate_constant"/>
        <variable initial_value="12" name="k33" units="nm"/>
        <variable initial_value="2200" name="k16" units="nm"/>
        <variable initial_value="60" name="k18" units="nm"/>
        <variable initial_value="800" name="P" units="nm"/>
        <variable cmeta:id="Akt_PIP3" initial_value="0" name="PIP3" units="nm"/>
        <variable cmeta:id="Akt_Akt" initial_value="10" name="Akt" units="nm"/>
        <variable cmeta:id="Akt_Akt_PIP3" initial_value="0" name="Akt_PIP3" units="nm"/>
        <variable cmeta:id="Akt_Akt_PIP" initial_value="0" name="Akt_PIP" public_interface="out" units="nm"/>
        <variable initial_value="11.4" name="PP2A" units="nm"/>
        <variable initial_value="1" name="one" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>P</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V28</ci>
                            <ci>PIP3</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k28</ci>
                            <ci>PIP3</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>kf27</ci>
                            <ci>PI3Kstar</ci>
                            <ci>P</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k27</ci>
                            <ci>P</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>PIP3</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <minus/>
                                    <ci>V28</ci>
                                </apply>
                                <ci>PIP3</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>k28</ci>
                                <ci>PIP3</ci>
                            </apply>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>kf27</ci>
                                <ci>PI3Kstar</ci>
                                <ci>P</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>k27</ci>
                                <ci>P</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf29</ci>
                            <ci>PIP3</ci>
                            <ci>Akt</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb29</ci>
                            <ci>Akt_PIP3</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Akt</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf29</ci>
                            <ci>PIP3</ci>
                            <ci>Akt</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb29</ci>
                            <ci>Akt_PIP3</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Akt_PIP3</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf29</ci>
                                <ci>PIP3</ci>
                                <ci>Akt</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb29</ci>
                                <ci>Akt_PIP3</ci>
                            </apply>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>V30</ci>
                                <ci>Akt_PIP3</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>k30</ci>
                                    <apply>
                                        <plus/>
                                        <ci>one</ci>
                                        <apply>
                                            <divide/>
                                            <ci>Akt_PIP</ci>
                                            <ci>k32</ci>
                                        </apply>
                                    </apply>
                                </apply>
                                <ci>Akt_PIP3</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>kf31</ci>
                            <ci>PP2A</ci>
                            <ci>Akt_PIP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k31</ci>
                                <apply>
                                    <plus/>
                                    <ci>one</ci>
                                    <apply>
                                        <divide/>
                                        <ci>MEKP</ci>
                                        <ci>k16</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>MEKPP</ci>
                                        <ci>k18</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIPP</ci>
                                        <ci>k33</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>Akt_PIP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Akt_PIP</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <ci>V30</ci>
                                    <ci>Akt_PIP3</ci>
                                </apply>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <times/>
                                        <ci>k30</ci>
                                        <apply>
                                            <plus/>
                                            <ci>one</ci>
                                            <apply>
                                                <divide/>
                                                <ci>Akt_PIP</ci>
                                                <ci>k32</ci>
                                            </apply>
                                        </apply>
                                    </apply>
                                    <ci>Akt_PIP3</ci>
                                </apply>
                            </apply>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <ci>kf31</ci>
                                    <ci>PP2A</ci>
                                    <ci>Akt_PIP</ci>
                                </apply>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <times/>
                                        <ci>k31</ci>
                                        <apply>
                                            <plus/>
                                            <ci>one</ci>
                                            <apply>
                                                <divide/>
                                                <ci>MEKP</ci>
                                                <ci>k16</ci>
                                            </apply>
                                            <apply>
                                                <divide/>
                                                <ci>MEKPP</ci>
                                                <ci>k18</ci>
                                            </apply>
                                            <apply>
                                                <divide/>
                                                <ci>Akt_PIPP</ci>
                                                <ci>k33</ci>
                                            </apply>
                                        </apply>
                                    </apply>
                                    <ci>Akt_PIP</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>V32</ci>
                                <ci>Akt_PIP</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>k32</ci>
                                    <apply>
                                        <plus/>
                                        <ci>one</ci>
                                        <apply>
                                            <divide/>
                                            <ci>Akt_PIP3</ci>
                                            <ci>k30</ci>
                                        </apply>
                                    </apply>
                                </apply>
                                <ci>Akt_PIP</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>kf33</ci>
                            <ci>PP2A</ci>
                            <ci>Akt_PIPP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k33</ci>
                                <apply>
                                    <plus/>
                                    <ci>one</ci>
                                    <apply>
                                        <divide/>
                                        <ci>MEKP</ci>
                                        <ci>k16</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>MEKPP</ci>
                                        <ci>k18</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIP</ci>
                                        <ci>k31</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>Akt_PIPP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Akt_PIPP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V32</ci>
                            <ci>Akt_PIP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k32</ci>
                                <apply>
                                    <plus/>
                                    <ci>one</ci>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIP3</ci>
                                        <ci>k30</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>Akt_PIP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>kf33</ci>
                            <ci>PP2A</ci>
                            <ci>Akt_PIPP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k33</ci>
                                <apply>
                                    <plus/>
                                    <ci>one</ci>
                                    <apply>
                                        <divide/>
                                        <ci>MEKP</ci>
                                        <ci>k16</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>MEKPP</ci>
                                        <ci>k18</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIP</ci>
                                        <ci>k31</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>Akt_PIPP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
