<?xml version='1.0' encoding='UTF-8'?>
<model name="PI3K_Hatakeyama" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <component name="PI3K">
        <variable name="time" public_interface="in" units="s"/>
        <variable initial_value="0.0012" name="kf1" units="second_order_rate_constant"/>
        <variable initial_value="0.00076" name="kb1" units="first_order_rate_constant"/>
        <variable initial_value="0.01" name="kf2" units="second_order_rate_constant"/>
        <variable initial_value="0.1" name="kb2" units="first_order_rate_constant"/>
        <variable initial_value="1" name="kf3" units="first_order_rate_constant"/>
        <variable initial_value="0.01" name="kb3" units="first_order_rate_constant"/>
        <variable initial_value="0.001" name="kf34" units="first_order_rate_constant"/>
        <variable initial_value="0" name="kb34" units="first_order_rate_constant"/>
        <variable initial_value="62.5" name="V4" units="flux"/>
        <variable initial_value="50" name="k4" units="nm"/>
        <variable initial_value="0.1" name="kf5" units="second_order_rate_constant"/>
        <variable initial_value="1" name="kb5" units="first_order_rate_constant"/>
        <variable initial_value="20" name="kf6" units="first_order_rate_constant"/>
        <variable initial_value="5" name="kb6" units="first_order_rate_constant"/>
        <variable initial_value="60" name="kf7" units="first_order_rate_constant"/>
        <variable initial_value="546" name="kb7" units="first_order_rate_constant"/>
        <variable initial_value="2040" name="kf8" units="first_order_rate_constant"/>
        <variable initial_value="15700" name="kb8" units="second_order_rate_constant"/>
        <variable initial_value="40.8" name="kf9" units="first_order_rate_constant"/>
        <variable initial_value="0" name="kb9" units="second_order_rate_constant"/>
        <variable initial_value="0.0154" name="V10" units="flux"/>
        <variable initial_value="340" name="k10" units="nm"/>
        <variable initial_value="0.1" name="kf23" units="second_order_rate_constant"/>
        <variable initial_value="2" name="kb23" units="first_order_rate_constant"/>
        <variable initial_value="9.85" name="kf24" units="first_order_rate_constant"/>
        <variable initial_value="0.0985" name="kb24" units="first_order_rate_constant"/>
        <variable initial_value="45.8" name="kf25" units="first_order_rate_constant"/>
        <variable initial_value="0.047" name="kb25" units="second_order_rate_constant"/>
        <variable initial_value="2620" name="V26" units="flux"/>
        <variable initial_value="3680" name="k26" units="nm"/>
        <variable cmeta:id="PI3K_R" initial_value="80" name="R" units="nm"/>
        <variable initial_value="1000" name="Shc" units="nm"/>
        <variable cmeta:id="PI3K_PI3K" initial_value="10" name="PI3K" units="nm"/>
        <variable cmeta:id="PI3K_HRG" initial_value="10" name="HRG" units="nm"/>
        <variable cmeta:id="PI3K_R_HRG" initial_value="0" name="R_HRG" units="nm"/>
        <variable initial_value="0" name="R_HRG2" units="nm"/>
        <variable initial_value="0" name="Internalisation" units="nm"/>
        <variable cmeta:id="PI3K_RP" initial_value="0" name="RP" units="nm"/>
        <variable cmeta:id="PI3K_R_Shc" initial_value="0" name="R_Shc" units="nm"/>
        <variable cmeta:id="PI3K_R_ShP" initial_value="0" name="R_ShP" units="nm"/>
        <variable cmeta:id="PI3K_ShP" initial_value="0" name="ShP" units="nm"/>
        <variable cmeta:id="PI3K_R_ShGS" initial_value="0" name="R_ShGS" units="nm"/>
        <variable cmeta:id="PI3K_ShGS" initial_value="0" name="ShGS" public_interface="out" units="nm"/>
        <variable cmeta:id="PI3K_GS" initial_value="10" name="GS" units="nm"/>
        <variable cmeta:id="PI3K_R_PI3K" initial_value="0" name="R_PI3K" units="nm"/>
        <variable cmeta:id="PI3K_R_PI3Kstar" initial_value="0" name="R_PI3Kstar" units="nm"/>
        <variable initial_value="0" name="PI3Kstar" public_interface="out" units="nm"/>
        <variable initial_value="2" name="two" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>kf1</ci>
                        </apply>
                        <ci>R</ci>
                        <ci>HRG</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>R_HRG</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>HRG</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>kf1</ci>
                        </apply>
                        <ci>R</ci>
                        <ci>HRG</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>R_HRG</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_HRG</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf1</ci>
                            <ci>R</ci>
                            <ci>HRG</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb1</ci>
                            <ci>R_HRG</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>two</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf2</ci>
                                <ci>R_HRG</ci>
                                <ci>R_HRG</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb2</ci>
                                <ci>R_HRG2</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_HRG2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf2</ci>
                                <ci>R_HRG</ci>
                                <ci>R_HRG</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb2</ci>
                                <ci>R_HRG2</ci>
                            </apply>
                        </apply>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf3</ci>
                                <ci>R_HRG2</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb3</ci>
                                <ci>RP</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V4</ci>
                            <ci>RP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k4</ci>
                            <ci>RP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>RP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <apply>
                                            <minus/>
                                            <apply>
                                                <minus/>
                                                <apply>
                                                    <minus/>
                                                    <apply>
                                                        <times/>
                                                        <ci>kf3</ci>
                                                        <ci>R_HRG2</ci>
                                                    </apply>
                                                    <apply>
                                                        <times/>
                                                        <ci>kb3</ci>
                                                        <ci>RP</ci>
                                                    </apply>
                                                </apply>
                                                <apply>
                                                    <divide/>
                                                    <apply>
                                                        <times/>
                                                        <ci>V4</ci>
                                                        <ci>RP</ci>
                                                    </apply>
                                                    <apply>
                                                        <plus/>
                                                        <ci>k4</ci>
                                                        <ci>RP</ci>
                                                    </apply>
                                                </apply>
                                            </apply>
                                            <apply>
                                                <minus/>
                                                <apply>
                                                    <times/>
                                                    <ci>kf5</ci>
                                                    <ci>RP</ci>
                                                    <ci>Shc</ci>
                                                </apply>
                                                <apply>
                                                    <times/>
                                                    <ci>kb5</ci>
                                                    <ci>R_Shc</ci>
                                                </apply>
                                            </apply>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>kf8</ci>
                                            <ci>R_ShP</ci>
                                        </apply>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>kb8</ci>
                                        <ci>ShGS</ci>
                                        <ci>RP</ci>
                                    </apply>
                                </apply>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <times/>
                                        <ci>kf23</ci>
                                        <ci>RP</ci>
                                        <ci>PI3K</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>kb23</ci>
                                        <ci>R_PI3K</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kf25</ci>
                                <ci>R_PI3Kstar</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb25</ci>
                            <ci>RP</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf34</ci>
                            <ci>RP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb34</ci>
                            <ci>Internalisation</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Internalisation</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf34</ci>
                        <ci>RP</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb34</ci>
                        <ci>Internalisation</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_Shc</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf5</ci>
                            <ci>RP</ci>
                            <ci>Shc</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb5</ci>
                            <ci>R_Shc</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf6</ci>
                            <ci>R_Shc</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb6</ci>
                            <ci>R_ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Shc</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf5</ci>
                                <ci>RP</ci>
                                <ci>Shc</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb5</ci>
                                <ci>R_Shc</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V10</ci>
                            <ci>ShP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k10</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_ShP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf6</ci>
                            <ci>R_Shc</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb6</ci>
                            <ci>R_ShP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf7</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb7</ci>
                            <ci>R_ShGS</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>GS</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <times/>
                                    <ci>kf7</ci>
                                    <ci>R_ShP</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>kb7</ci>
                                    <ci>R_ShGS</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kf9</ci>
                            <ci>ShGS</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb9</ci>
                        <ci>GS</ci>
                        <ci>ShP</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ShP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf9</ci>
                            <ci>ShGS</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb9</ci>
                            <ci>GS</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V10</ci>
                            <ci>ShP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k10</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_ShGS</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf7</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb7</ci>
                            <ci>R_ShGS</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf8</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb8</ci>
                            <ci>ShGS</ci>
                            <ci>RP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ShGS</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf8</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb8</ci>
                            <ci>ShGS</ci>
                            <ci>RP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf9</ci>
                            <ci>ShGS</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb9</ci>
                            <ci>GS</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_PI3K</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf23</ci>
                            <ci>RP</ci>
                            <ci>PI3K</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb23</ci>
                            <ci>R_PI3K</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf24</ci>
                            <ci>R_PI3K</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb24</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>PI3K</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf23</ci>
                                <ci>RP</ci>
                                <ci>PI3K</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb23</ci>
                                <ci>R_PI3K</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_PI3Kstar</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf24</ci>
                            <ci>R_PI3K</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb24</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf25</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb25</ci>
                            <ci>RP</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>PI3Kstar</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf25</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb25</ci>
                            <ci>RP</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
