<?xml version='1.0' encoding='UTF-8'?>
<model name="RAS_Hatakeyama" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <component name="RasGDPtoRasGTP">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="ShGS" public_interface="in" units="nm"/>
        <variable cmeta:id="RasGDPtoRasGTP_RasGTP" initial_value="0" name="RasGTP" public_interface="out" units="nm"/>
        <variable initial_value="0.222" name="kf11" units="first_order_rate_constant"/>
        <variable initial_value="0.181" name="k11" units="nm"/>
        <variable initial_value="0.289" name="V12" units="flux"/>
        <variable initial_value="0.0571" name="k12" units="nm"/>
        <variable cmeta:id="RasGDPtoRasGTP_RasGDP" initial_value="120" name="RasGDP" units="nm"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>RasGDP</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <apply>
                                <minus/>
                                <ci>kf11</ci>
                            </apply>
                            <ci>ShGS</ci>
                            <ci>RasGDP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k11</ci>
                            <ci>RasGDP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V12</ci>
                            <ci>RasGTP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k12</ci>
                            <ci>RasGTP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>RasGTP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>kf11</ci>
                            <ci>ShGS</ci>
                            <ci>RasGDP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k11</ci>
                            <ci>RasGDP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V12</ci>
                            <ci>RasGTP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k12</ci>
                            <ci>RasGTP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
